PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022
  Window size (pixels) = [1512, 982]
  color = white
  expName = ToT_2_v3
  keyboardBackend = ioHub
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Routines
  Routine Introduction
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in this on-line picture naming study,   All you have to do is to have a go at retrieving the name/word, in English, for each  object/picture, and then type it in.    Here are the instructions - please do read, especially so you are clear about what a Tip of the Tongue (ToT) experience is.

        The pictures of objects will be presented in the centre of the screen one by one  (there will be a central fixation cross on the screen, just before each picture). The pictures are on for a maximum of 5 seconds.

        You respond by pressing one of the arrow keys on your keyboard, and there will be a reminder on your screen as to how to select. Remember to place your hand ready over the arrow keys when you see the fixation cross on the screen.


        Press ‘space’ to continue…
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine No_Music_Trials
    TextComponent FC_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent No_Mus_IMG_L
      image [set every repeat] = $No_Mus_Img_L
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent No_Mus_IMG_R
      image [set every repeat] = $No_Mus_Img_R
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent No_Mus_Dot
      letterHeight = 0.1
      pos [set every repeat] = $No_Mus_Dot_Pos
      startVal [time (s)] = 1.025
      stopVal [duration (s)] = 0.5
      text [set every repeat] = .
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  Routine Music_Trials
    TextComponent Mus_FC
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent Mus_Img_L
      disabled = True
      image [set every repeat] = $Image_L
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent Mus_Img_R
      disabled = True
      image [set every repeat] = $Image_R
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent Mus_Dot
      disabled = True
      letterHeight = 0.1
      pos [set every repeat] = $Dot_Pos
      startVal [time (s)] = 1.025
      stopVal [duration (s)] = 0.5
      text [set every repeat] = .
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  Routine End
    TextComponent text_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for compleing this experiment.

        When you press ‘space’, the session will end and the screen will go blank. At this point you can close this tab and return to the Qualtrics survey where if you press continue, you will see the debrief form again.

        press ‘space’ to continue…
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Routine
    TextComponent FC_1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent Stimulus
      image [set every repeat] = $Img
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    ImageComponent L_Arrow
      image = Arrow.png
      ori = 270
      pos = (-0.15, -0.45)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    ImageComponent Up_Arrow
      image = Arrow.png
      ori = 180
      pos = (0, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    ImageComponent R_Arrow
      image = Arrow.png
      ori = 90
      pos = (0.15, -0.45)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    KeyboardComponent key_resp_15
      allowedKeys [set every repeat] = 'left','right','up'
      forceEndRoutine = True
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 6
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    TextComponent DK
      color = black
      letterHeight = 0.02
      pos = (-0.25, -0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Don’t Know
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    TextComponent ToT
      color = black
      letterHeight = 0.02
      pos = (0.25, -0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = ToT
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    TextComponent Know
      color = black
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Know
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  Routine Test_Response
    KeyboardComponent key_resp_2
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions_for_response
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Was the dot on the left or right hand side?
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    ImageComponent left_arrow
      image = Arrow.png
      ori = 90
      pos = (0.2, -0.45)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent right_arrow
      image = Arrow.png
      ori = 270
      pos = (-0.2, -0.45)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Left      Right
  Routine Break_Before_No_Music
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Siiiick




        Press ‘space’ to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine No_Music_Feedback
  Routine Music_Feedback
  Routine Mood_Slider
    SliderComponent slider
      borderColor = black
      forceEndRoutine = True
      granularity = 0
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = please rate your mood right now where 0 is negative and 10 is positive. Then there are faces on each end of slider
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    ImageComponent image_3
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That concludes the practice trials.

        When you are ready, press the ‘space’ bar to move on to the full set of trials.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Music_2
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 150
      text = Please sit back, relax and enjoy the music.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 150
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    SoundComponent sound_1
      sound [set every repeat] = PositiveMusic.mp3
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 150
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      text:
        Thank you for listening. Please remove your headphones.

        Press the ‘space’ bar to continue
  Routine Mood_Slider_2
    TextComponent text_8
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = please rate your mood right now where 0 is negative and 10 is positive
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      initVal = 6
      labels = (0, 10)
      letterHeight = 0.05
      size = (0.85, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
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    ImageComponent image
      image = Emoji_Icon_-_Sad_Emoji_grande.webp
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = Happy_Emoji_Icon_5c9b7b25-b215-4457-922d-fef519a08b06_large.webp
      pos = (0.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Intro_Slider
    TextComponent text_9
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Here are the 3 response options:

        KNOW  If you know the name of the object (in the English language), then click on the upward KNOW arrow, as soon as you have retrieved its name.  This will be followed by a text box, for you to type in the name (don’t worry at all about spelling accuracy or typos).

        Press ‘space’ to continue…
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Experiment_Instructions
    TextComponent text_10
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for your response.

        You will now be shown a set of faces and a dot will appear. Your task is to press either the left arrow key, or the right arrow key to show which side the dot appeared on.

        You will now be shown 5 test trials to get used to the experiment.

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Music
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please put on some headphones and make sure your volume is turned half way up.

        You are going to listen to a piece of music. Simply sit back and relax.


        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break_2
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now going to complete a set of trials similar to the ones you completed prior to listening to the music.

        press the ‘space’ bar to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_entry
    TextboxComponent text_response
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent textbox_time_taken_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instruction
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        If you selected Know, please type in the name of the object.

        If you selected ToT or DK, you can type anything you can remember, or leave blank.
    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the ‘return’ or ‘enter’ key to continnue.
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        text_response.refresh()
  Routine Intro_3
    TextComponent text_15
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        ToT – i.e. Tip of the Tongue experience.   If, on the other hand, you know you know the name of the object (in the English language), and have a specific word in mind , but cannot quite retrieve it at this moment, then please click the right ToT arrow on your keyboard.



        This will also be followed by a text box, and if you remember anything about the name (e.g., the first letter/sound, or any other letters/sounds, or the number of syllables), you can type this in.



        Or else you can briefly type anything you do know about the object.  Otherwise you can leave the text box blank.



        Press ‘Space’ to continue…
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro_4
    TextComponent text_16
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        DK –   click on the left DK arrow if either the object is unfamiliar to you and you don't know what it is, or else you don’t know  the name in English (e.g., you may have forgotten it).



        This is not the same as a ToT -  remember a ToT is when you know you know the name, and have a specific word in mind, but just can’t quite retrieve it there and then.



        Again, the text box will appear in case you want to type anything you do know about the object.  Otherwise you can leave the text box blank.



        After this, you press the return key, for the next picture trial.


        Press ‘space’ to continue…
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prompt
    TextComponent text_17
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Feel free to take a quick break at this stage before continuing the next set of trials


        press ‘space’ to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro_5
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We expect the study to take about 10 to 15 minutes, and thank you again for taking part.

        Press ‘Space’ to continue…
  Routine Debrief_1
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        ONLINE PARTICIPANT DEBRIEF SHEET

        Comparing the incidence of “Tip of the Tongue” (ToT) naming experiences for pictures of objects (and/or definitions of words), for both monolingual and bilinguals/multilinguals.

        Thank you for participating in my research study on word retrieval and Tip of the Tongue (ToT) experiences. This document offers information that may be relevant in light of you having now taken part. Please do take screenshots if you wish.

        Press ‘space’ to continue…
  Routine Debrief_2
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        How will my data be managed?

        [REDACTED] is the Data Controller for any personal information processed as part of this research project. The University will ensure that the personal data it processes is held securely and processed in accordance with the GDPR and the Data Protection Act 2018. More detailed information is available in the participant Information Sheet, which you received when you agreed to take part in the research.

        Press ‘space’ to continue.
  Routine Debrief_3
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_21
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        What will happen to the results of the research?

        The data will consist of the anonymous typed-in naming responses for all participants, and I will be statistically comparing these responses (e.g., number of ToTs) across the conditions (e.g., for different types of pictures). If you wish to withdraw your data, please email me, giving your chosen Participant anonymous code, at the above email, within 3 weeks of taking part. The research will be written up as a thesis and submitted for assessment. The thesis will be publically available on UEL’s online Repository. Findings may also be disseminated to a range of audiences (e.g., academics, clinicians, public, etc.) through journal articles, conference presentations, talks, magazine articles. In all material produced, your identity will remain anonymous, in that, it will not be possible to identify you. You have the option to receive a summary of the research findings from the student researcher once the study has been completed. IF you are interested to receive a summary, please contact me in August 2022, using the email above. Anonymised research data (the typed-in responses from all participants) will be securely stored by [REDACTED] for a maximum of 3 years. However, if the study is published, the data will be held for longer, and placed in a data repository, so that other researchers can access it.

        Press ‘space’ to continue.
  Routine Debrief_4
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_22
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        What if I been adversely affected by taking part?



        It is not anticipated that you will have been adversely affected by taking part in the research, and all reasonable steps have been taken to minimise distress or harm of any kind. Nevertheless, it is possible that your participation – or its after-effects – may have been challenging, distressing or uncomfortable in some way.



        Remember - you were not expected to be able to know and name all the stimuli, which included some quite unusual (low frequency) objects and/or definitions. Also, most people experience Tip of the Tongues from time to time. However, if you are at all concerned about your ability to retrieve words, you are advised to contact your doctor/GP.


        Press ‘space’ to continue…
  Routine Debrief_5
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Who can I contact if I have any questions/concerns?

        If you would like further information about my research or have any questions or concerns, please do not hesitate to contact me.

        If you have any questions or concerns about how the research has been conducted, please contact my research supervisor [REDACTED]

        or

        Chair of School Research Ethics Committee: [REDACTED]
        Thank you for taking part in my study

        Press ‘space’ to continue…
Flow
  Routine Introduction
  Routine Intro_Slider
  Routine Intro_3
  Routine Intro_4
  Routine Intro_5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ToT_2_conditions_master.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Img': 'armadillo.jpg', 'condition': 1},
      {'Img': 'cheetah.jpg', 'condition': 1},
      {'Img': 'lynx.jpg', 'condition': 1},
      {'Img': 'lioness.jpg', 'condition': 1},
      {'Img': 'kangaroo.jpg', 'condition': 1},
      {'Img': 'rhino.jpg', 'condition': 1},
      {'Img': 'tiger.jpg', 'condition': 1},
      {'Img': 'penguin.jpg', 'condition': 1},
      {'Img': 'goose.jpg', 'condition': 1},
      {'Img': 'ostrich.jpg', 'condition': 1},
      {'Img': 'pelican.jpg', 'condition': 1},
      {'Img': 'toucan.jpg', 'condition': 1},
      {'Img': 'pomegranate.jpg', 'condition': 1},
      {'Img': 'avocado.jpg', 'condition': 1},
      {'Img': 'ladybird.jpg', 'condition': 1},
      {'Img': 'scorpion.jpg', 'condition': 1},
      {'Img': 'bee.jpg', 'condition': 1},
      {'Img': 'dragonfly.jpg', 'condition': 1},
      {'Img': 'lobster.jpg', 'condition': 1},
      {'Img': 'crab.jpg', 'condition': 1},
      {'Img': 'dolphin.jpg', 'condition': 1},
      {'Img': 'eel.jpg', 'condition': 1},
      {'Img': 'acorn.jpg', 'condition': 1},
      {'Img': 'artichoke.jpg', 'condition': 1},
      {'Img': 'asparagus.jpg', 'condition': 1},
      {'Img': 'eggplant.jpg', 'condition': 1},
      {'Img': 'pumpkin.jpg', 'condition': 1},
      {'Img': 'cauliflower.jpg', 'condition': 1},
      {'Img': 'leek.jpg', 'condition': 1},
      {'Img': 'cucumber.jpg', 'condition': 1},
      {'Img': 'castle.jpg', 'condition': 2},
      {'Img': 'pagoda.jpg', 'condition': 2},
      {'Img': 'pyramid.jpg', 'condition': 2},
      {'Img': 'lighthouse.jpg', 'condition': 2},
      {'Img': 'skull.jpg', 'condition': 2},
      {'Img': 'diamond.jpg', 'condition': 2},
      {'Img': 'lectern.jpg', 'condition': 2},
      {'Img': 'wardrobe.jpg', 'condition': 2},
      {'Img': 'tractor.jpg', 'condition': 2}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
    Routine Test_Routine
    Routine text_entry
  LoopTerminator trials
  Routine Debrief_1
  Routine Debrief_2
  Routine Debrief_3
  Routine Debrief_4
  Routine Debrief_5
  Routine End
